PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'dominant_hand': "'right','left'"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = ClickOnly
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine prepareExp
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    CodeComponent codePrepareExp
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        import itertools

        """ For sampling """
        class SimplePerturbationLoader:
            def __init__(self):
                # create stimulus samples
                self.stim_ranges = [
                    [12, 36],
                    [54, 78],
                    [102, 126],
                    [144, 168],
                ]
                self.n_sample_per_range = 5
                self.stim_samples = [
                    np.linspace(s[0], s[1], self.n_sample_per_range)
                    for s in self.stim_ranges]

                # create perturbation sampling range
                self.perturbations = [
                    (1, 1), # quadrant 1
                    (-1, 1), # quadrant 2
                    (-1, -1), # quadrant 3
                    (1, -1), # quadrant 4
                ]

                # set other configurations
                self.jittering = 2

            def stim_add_noise(self, xs):
                noise = np.random.uniform(low=-1, high=1, size=xs.shape) * self.jittering
                return xs + noise

            def generate_one_batch_stims(self):
                stim_list = np.concatenate(self.stim_samples)
                # add some noise
                sampled_stims = self.stim_add_noise(stim_list)
                # combination
                combinations = list(itertools.product(sampled_stims, self.perturbations))
                random.shuffle(combinations)
                return combinations
      Begin Experiment:
        # set configrations
        N_REPEATS = 4
        N_REPEAT_BLOCK = 2
        DELAY_LENGTH = 5

        # read exp settings
        dominant_hand = expInfo['dominant_hand']
        is_right_handed = dominant_hand == 'right'

        # add managers
        stim_perturb_loader = SimplePerturbationLoader()
      Begin Routine:
        # now generate the stimuli and perturbations
        all_repats_stims = []
        BLOCK_SIZE = 0
        for _ in range(N_REPEATS):
            # generate stims and perturbations
            stim_perturb_list = stim_perturb_loader.generate_one_batch_stims()
            # logging.info('DEBUGGING')
            # logging.info(len(stim_perturb_list))
            # cut into blocks
            assert len(stim_perturb_list) % N_REPEAT_BLOCK == 0
            BLOCK_SIZE = len(stim_perturb_list) // N_REPEAT_BLOCK
            for i in range(N_REPEAT_BLOCK):
                all_repats_stims.append(stim_perturb_list[i*BLOCK_SIZE:(i+1)*BLOCK_SIZE])

        N_BLOCKS = N_REPEATS * N_REPEAT_BLOCK

        logging.info(N_BLOCKS)
  Routine Display
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  Routine Delay
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    KeyboardComponent keyDelay
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = DELAY_LENGTH
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    CodeComponent codeDelay
      Code Type = Py
      Before Experiment:
        """ For generating perturbations """
        class PerturbationManager:
            def __init__(self, win):
                self.perturb_scale_range = [0.1, 0.25]
                self.radius = 0.05

                # load resources
                self.img = visual.ImageStim(
                    win, image='resources/landolt_white.png',
                    pos=(0, 0),
                    ori=0,
                    size=(self.radius, self.radius))

            def generate_perturb_position(self, perturb_code):
                perturb_center = np.random.uniform(
                    self.perturb_scale_range[0],
                    self.perturb_scale_range[1],
                    size=2
                ) * np.array(perturb_code) # center of perturbation
                return perturb_center

            def generate_gradient_mask(self, win, perturb_code):
                ## position
                center = self.generate_perturb_position(perturb_code)
                self.img.pos = center
                ## rotation
                rotation = np.random.randint(10, 170) * (np.random.randint(2)+1) # avoid ambiguous
                self.img.ori = rotation

                perturb_info = {
                    'pos': center,
                    'radius': self.radius,
                    'ori': rotation,
                }

                return self.img, perturb_info


        class TimepointSchedueler:
            def __init__(self, timing_settings, delay_length):
                self.n_min, self.n_max = timing_settings['n']
                self.per_t_min, self.per_t_max = timing_settings['duration']
                self.earliest, self.latest = timing_settings['timing']
                self.min_gap = timing_settings['min_gap']
                self.delay_length = delay_length

                # check settings
                assert delay_length >= self.latest
                assert (
                    self.n_max * self.per_t_max +
                    (self.n_max-1) * self.min_gap +
                    self.earliest) <= self.latest

                # reset schedule
                self.schedule = None
                self.current_id = -1
                self.on = False

            def reset_schedule(self):
                self.schedule = []

                # sample number of epochs
                n_epochs = np.random.choice(
                    np.arange(self.n_min, self.n_max+1)
                )
                # determine duration of each epochs
                durations = np.random.uniform(
                    self.per_t_min, self.per_t_max, size=n_epochs
                )

                # sample the start points
                reduced_duration = self.latest - self.earliest - np.sum(
                    durations) - (n_epochs) * self.min_gap
                starts = np.random.uniform(0, reduced_duration, size=n_epochs)
                starts = np.sort(starts)

                # get time start end for each
                t_overhead = self.earliest
                for i in range(n_epochs):
                    start_t = t_overhead + starts[i]
                    end_t = start_t + durations[i]
                    self.schedule.append([start_t, end_t])
                    t_overhead += self.min_gap
                    t_overhead += end_t - start_t

                # other stuffs
                self.on = False
                self.current_id = 0

            def check_schedule(self, t):
                # check whether it's on or off
                n_total = len(self.schedule)
                if self.current_id < n_total:
                    epoch = self.schedule[self.current_id]
                    if t < epoch[0]:
                        self.on = False
                    elif t > epoch[1]:
                        self.on = False
                        self.current_id += 1
                    else:
                        self.on = True
                else:
                    self.on = False

                return self.on
      Begin Experiment:
        # a few configurations
        perturbation_manager = PerturbationManager(win)

        ## number of perturbations during the delay
        PERTURB_TIMING_SETTINGS = {
            'n': (2, 2),
            'duration': (1.0, 1.5),
            'timing': (0.5, 4.5),
            'min_gap': 0.05,
        }
        perturb_scheduler = TimepointSchedueler(
            timing_settings=PERTURB_TIMING_SETTINGS,
            delay_length=DELAY_LENGTH,
        )

        ## left / right hand mapping
        left_hand_keys = ['j', 'k'] # for left-handed
        right_hand_keys = ['a', 's'] # for right-handed
        assert len(left_hand_keys) == len(right_hand_keys)
        resp_key_map = right_hand_keys if is_right_handed else left_hand_keys

        ## load sound feedback
        correct_sound = sound.Sound('bleep.wav')
        wrong_sound   = sound.Sound('buzz.wav')
      Begin Routine:
        # set up the timing of displaying perturbations
        cur_perturb_obj = None
        state_on = False
        perturb_scheduler.reset_schedule()

        # get stim perturb codes
        perturb_code = cur_block_stim_perturbs[cur_trial_i][1]
        perturb_mask = None
        ans_key = None
      Each Frame:
        # check time first
        new_state = perturb_scheduler.check_schedule(t)
        if new_state:
            if not state_on:
                # create a new object
                perturb_mask, perturb_info = perturbation_manager.generate_gradient_mask(
                    win, perturb_code)
                # TODO: save the info
                ans_is_left = perturb_info['ori'] > 180
            perturb_mask.draw()
        else:
            # destroy perturb mask
            perturb_mask = None
        state_on = new_state

        # read the keyboard input
        keys = keyDelay.getKeys(resp_key_map)
        if state_on and keys:
            # stop sounds
            correct_sound.stop()
            wrong_sound.stop()

            # check the key
            last_key = keys[-1].name
            key_is_left = last_key.lower() == resp_key_map[0]
            key_is_correct = key_is_left == ans_is_left
            if key_is_correct:
                correct_sound.play()
            else:
                wrong_sound.play()

            # save the result
            cur_perturb_id = perturb_scheduler.current_id
            thisExp.addData(f'perturb_{cur_perturb_id}_correct', int(key_is_correct))
    TextboxComponent textDelayPlaceholder
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = DELAY_LENGTH 
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  Routine OriTest
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  Routine PreTrial
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    CodeComponent codePretrial
      Code Type = Py
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      Begin Routine:
        cur_trial_i = trialLoop.thisN
        cur_trial_stim_perturbs = cur_block_stim_perturbs[cur_trial_i]
  Routine postTrial
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  Routine PreBlock
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    CodeComponent codePreBlock
      Code Type = Py
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      Begin Routine:
        cur_block_stim_perturbs = all_repats_stims[blockLoop.thisN]
Flow
  Routine prepareExp
  LoopInitiator DebugLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator blockLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = N_BLOCKS
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      Routine PreBlock
      LoopInitiator trialLoop loopType="TrialHandler"
        loopType = sequential
        nReps = BLOCK_SIZE
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        Routine PreTrial
        Routine Display
        Routine Delay
        Routine OriTest
        Routine postTrial
      LoopTerminator trialLoop
    LoopTerminator blockLoop
  LoopTerminator DebugLoop
